<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q4="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q1="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="SelectMany">
        <Name>MotionDetect</Name>
        <Description>Detects motion in incoming video stream and generates a UDP message. The UDP message can be read elsewhere to complete the closed-loop feedback</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeInterval" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="q1:SendMessage">
              <q1:Connection>UdpSend</q1:Connection>
              <q1:Address>/number</q1:Address>
            </Expression>
            <Expression xsi:type="q2:CsvWriter">
              <q2:FileName>D:\ClosedLoopBonsai_Temp\Raw_Motion_.csv</q2:FileName>
              <q2:Append>false</q2:Append>
              <q2:Overwrite>true</q2:Overwrite>
              <q2:Suffix>FileCount</q2:Suffix>
              <q2:IncludeHeader>false</q2:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Average" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Threshold">
                <q4:ThresholdValue>10</q4:ThresholdValue>
                <q4:MaxValue>255</q4:MaxValue>
                <q4:ThresholdType>Binary</q4:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Rescale">
                <q3:Min>0</q3:Min>
                <q3:Max>10</q3:Max>
                <q3:RangeMin>0</q3:RangeMin>
                <q3:RangeMax>2</q3:RangeMax>
                <q3:RescaleType>Linear</q3:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:VideoWriter">
                <q4:FileName>D:\ClosedLoopBonsai_Temp\video_.avi</q4:FileName>
                <q4:Suffix>FileCount</q4:Suffix>
                <q4:Buffered>true</q4:Buffered>
                <q4:Overwrite>true</q4:Overwrite>
                <q4:FourCC>JPEG</q4:FourCC>
                <q4:FrameRate>200</q4:FrameRate>
                <q4:FrameSize>
                  <q4:Width>0</q4:Width>
                  <q4:Height>0</q4:Height>
                </q4:FrameSize>
                <q4:ResizeInterpolation>NearestNeighbor</q4:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Skip">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="q2:CsvWriter">
              <q2:FileName>D:\ClosedLoopBonsai_Temp\Pointgrey_Metadata_.csv</q2:FileName>
              <q2:Append>false</q2:Append>
              <q2:Overwrite>true</q2:Overwrite>
              <q2:Suffix>FileCount</q2:Suffix>
              <q2:IncludeHeader>false</q2:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Crop">
                <q4:RegionOfInterest>
                  <q4:X>224</q4:X>
                  <q4:Y>196</q4:Y>
                  <q4:Width>204</q4:Width>
                  <q4:Height>256</q4:Height>
                </q4:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:Smooth">
                <q4:SmoothType>Median</q4:SmoothType>
                <q4:Size1>3</q4:Size1>
                <q4:Size2>1</q4:Size2>
                <q4:Sigma1>0</q4:Sigma1>
                <q4:Sigma2>0</q4:Sigma2>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Interval.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="q2:CsvWriter">
              <q2:FileName>D:\ClosedLoopBonsai_Temp\Time_Interval_.csv</q2:FileName>
              <q2:Append>false</q2:Append>
              <q2:Overwrite>true</q2:Overwrite>
              <q2:Suffix>FileCount</q2:Suffix>
              <q2:IncludeHeader>false</q2:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>14</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>16</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>15</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>17</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>19</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TriggeredWindow">
          <Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:GpioPinState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:FlyCapture">
          <q5:Index>0</q5:Index>
          <q5:ColorFormat>Bgr</q5:ColorFormat>
          <q5:ColorProcessing>Default</q5:ColorProcessing>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>1</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.TimeInterval, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.SendMessage, Bonsai.Osc, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Average, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.AbsoluteDifference, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Rescale, Bonsai.Dsp, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Skip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Smooth, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TriggeredWindow, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DistinctUntilChanged, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.GreaterThanBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.GpioPinState, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>